PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = ContextChoice
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine instructions
    TextComponent Disclaimer
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Here is where the disclaimer and explanation of the task will be

        Lorem ipsum dolor sit amet, consectetur adipiscing elit. Mauris quam lacus, aliquet id eros ac, sollicitudin gravida augue. Sed scelerisque arcu massa, id ultricies libero aliquet non. Fusce arcu lorem.
  Routine trial
    TextComponent ContextPresentation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $written_context
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    PolygonComponent FixationCross
      fillColor = black
      lineColor = black
      lineWidth = 0.6
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
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    ImageComponent stimA
      image [set every repeat] = $imageA
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 4
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    ImageComponent stimB
      image [set every repeat] = $imageB
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 4
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    PolygonComponent squareA
      lineColor = lime
      lineWidth = 5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 8
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    PolygonComponent squareB
      lineColor = lime
      lineWidth = 5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 8
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 9
      stopVal [duration (s)] = 4
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    EyetrackerRecordComponent recEYE
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 13
      syncScreenRefresh = False
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    EmotivRecordingComponent recEEG
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13
      syncScreenRefresh = False
  Routine confidence
    TextComponent question_confidence
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      text = How confident are you with your choice?
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    SliderComponent slider_confidence
      borderColor = grey
      forceEndRoutine = True
      granularity = 1
      labels = ("Nothing","Absolutely")
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (1.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      styles = radio
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine valueA
    TextComponent question_valueA
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      text = How would you value this option in the given context?
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    SliderComponent slider_valueA
      borderColor = grey
      forceEndRoutine = True
      granularity = 1
      labels = ("Hate it","Love it")
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      storeRatingTime = False
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimA_2
      image [set every repeat] = $imageA
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 4
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  Routine valueB
    TextComponent question_valueB
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      text = How would you value this option in the given context?
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    SliderComponent slider_valueB
      borderColor = grey
      forceEndRoutine = True
      granularity = 1
      labels = ("Hate it","Love it")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimB_2
      image [set every repeat] = $imageB
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 4
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = DemoLoop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'written_context': '"Which food brand would you rather be the commercial face of?"', 'imageA': 'images/0a.jpg', 'imageB': 'images/0b.jpg'},
      {'written_context': '" You are going to spend two days without..."', 'imageA': 'images/1a.jpg', 'imageB': 'images/1b.jpg'},
      {'written_context': '" You are going to travel twenty minutes by... "', 'imageA': 'images/2a.jpg', 'imageB': 'images/2b.jpg'},
      {'written_context': '" Which sense would you rather lose because of an accident? "', 'imageA': 'images/3a.jpg', 'imageB': 'images/3b.jpg'},
      {'written_context': '" Your roommate plays this instrument for three hours daily... "', 'imageA': 'images/4a.jpg', 'imageB': 'images/4b.jpg'},
      {'written_context': '" You are alone on an island and only have... "', 'imageA': 'images/5a.jpg', 'imageB': 'images/5b.jpg'}]
    Routine trial
    Routine confidence
    Routine valueA
    Routine valueB
  LoopTerminator trials
